CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Time>[0-9]{1,2}[A-Z]{2})_(?P<Mouse>[A-Z]{1,2}[0-9]{1,3})_(?P<Treatment>.*)_(?P<Well>[0-9])_(?P<Stain>[A-Z]{2,5})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
    Select the rule criteria:or (file does contain "BF")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "HOECHST")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CASP3")
    Name to assign these images:CASP3
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "EDU")
    Name to assign these images:EdU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "MERGE")
    Name to assign these images:All
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TUNEL")
    Name to assign these images:TUNEL
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Mouse
    Metadata category:Well

ColorToGray:[module_num:5|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
    Select the input image:CASP3
    Conversion method:Combine
    Image type:Channels
    Name the output image:CASPGray
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    Channel count:1
    Channel number:Red: 1
    Relative weight of the channel:1.0
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
ApplyThreshold:[module_num:6|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
    Select the input image:DNA
    Name the output image:ThreshBlue
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.01
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
ImageMath:[module_num:7|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:InvertBlue
    Image or measurement?:Image
    Select the first image:ThreshBlue
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ApplyThreshold:[module_num:8|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
    Select the input image:InvertBlue
    Name the output image:ThreshInvertedBlue
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Above threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.92
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:ThreshInvertedBlue
    Name the primary objects to be identified:Organoids
    Typical diameter of objects, in pixel units (Min,Max):50,500
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:No
    Enter LoG filter diameter:40
    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Background
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,.01
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Organoids
    Calculate the Zernike features?:No

FilterObjects:[module_num:11|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
    Name the output objects:FilteredSize
    Select the object to filter:Organoids
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:2000
    Filter using a maximum measurement value?:Yes
    Maximum value:1000000

MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:FilteredSize
    Calculate the Zernike features?:No

FilterObjects:[module_num:13|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
    Name the output objects:Filtered_Eccentricity
    Select the object to filter:FilteredSize
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.9

MeasureObjectSizeShape:[module_num:14|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
    Select objects to measure:Filtered_Eccentricity
    Calculate the Zernike features?:No

FilterObjects:[module_num:15|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
    Name the output objects:Filtered_Solidity
    Select the object to filter:Filtered_Eccentricity
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Solidity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.8
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

MeasureObjectSizeShape:[module_num:16|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
    Select objects to measure:Filtered_Solidity
    Calculate the Zernike features?:No

ExpandOrShrinkObjects:[module_num:17|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
    Select the input objects:Filtered_Solidity
    Name the output objects:enlarged_area
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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    Retain the outlines of the identified objects?:No
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
MeasureObjectIntensity:[module_num:18|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
    Hidden:4
    Select an image to measure:CASPGray
    Select an image to measure:EdU
    Select an image to measure:DNA
    Select an image to measure:TUNEL
    Select objects to measure:enlarged_area
    Select objects to measure:Filtered_Solidity

ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\\\\\\\Shankman\\\\\\\\2019-4-22 700 rad Cs Irradiated Day 4 Enteroids\\\\\\\\Analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:enlarged_area|Intensity_StdIntensity_CASPGray,enlarged_area|Intensity_StdIntensity_DNA,enlarged_area|Intensity_StdIntensity_TUNEL,enlarged_area|Intensity_StdIntensity_EdU,enlarged_area|Intensity_IntegratedIntensity_CASPGray,enlarged_area|Intensity_IntegratedIntensity_TUNEL,enlarged_area|Intensity_IntegratedIntensity_DNA,enlarged_area|Intensity_IntegratedIntensity_EdU,enlarged_area|Intensity_MeanIntensity_CASPGray,enlarged_area|Intensity_MeanIntensity_TUNEL,enlarged_area|Intensity_MeanIntensity_DNA,enlarged_area|Intensity_MeanIntensity_EdU,enlarged_area|Intensity_MedianIntensity_CASPGray,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::CX39
    Overwrite without warning?:No
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
ExportToDatabase:[module_num:20|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:TimeDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:enlarged_area
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:BF,CASP3,DNA,EdU
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:2
    Properties filter field count:0
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    Experiment name:Time
    Which objects should be used for locations?:enlarged_area
    Enter a phenotype class table name if using the classifier tool:Viable
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CPA images via URL?:No
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    Do you want to add group fields?:Yes
    Enter the name of the group:Day
    Enter the per-image columns which define the group, separated by commas:Well
    Enter the name of the group:Well
    Enter the per-image columns which define the group, separated by commas:Stain
    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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